// Operational parameters
flagprint= 1		// controls how many notes print to screen. 0=few, 1=some, 2=many
PrintConnSummary = 1		// Controls whether to print the Number of Connections (1=yes, 0=no)
PrintConnDetails = 0		// Controls whether to print the detailed Connection list (2=yes immediately, 1=yes at end of program, 0=no)
printPosition = 1	// Controls whether to print the position list (1=yes, 0=no)

// Model parameters
percentSclerosis = 50	// Set % of cell death, for cells flagged as susceptible to death
connectionFactor = 500	// Set factor to control # connections formed in the network;
						// 	changes depending on total # cells
randnet = 0		// If 0, decrease probability of self-connection based on sclerosis amount,
				// 	for cell types flagged as susceptible
secondorder= 2	// A global variable which specifies the time integration method
				// 	(see NEURON reference)
tstart= 0		// Start time of simulation
tstop= 100		// Stop time of simulation
dt= 0.1			// Integration interval for fadvance (see NEURON reference)

v_init = -60						// All voltages of all sections are initialized to this voltage (mV)
N = 1								// Specifies step resolution (see NEURON reference for steps_per_ms),
									// 	sometimes 1, sometimes 4
steps_per_ms = 1*N/(dt)				// Controls the intervals at which points are plotted

dentateBins = 100					// Equivalent subdivisions of the dentate
dentateLength = 6000				// Length of dentate in microns
dentateBinSize = int(dentateLength/dentateBins)	// Length of each bin (along x dimension) in microns

noise_random_stream_offset_ = (tstop - tstart)/dt + 1	// Each noise generator picks a number every
														// 	dt for the full time range, so stream
														// 	sections must be at least this long to
														// 	prevent overlap
														
strdef Stimulation
Stimulation="pulse"
strdef Connectivity
Connectivity="slow"