// Generic cell template with morphology initialized from neuroh5 dictionaries
begintemplate Cell

public connect2target, subsets, is_art, is_connected
public all, soma, basal, apical, ais, hillock, axon, allaxon
public somaidx, basalidx, apicalidx, axonidx
public xx, yy, zz, position

// dends is properly created in init()
create sections[1]

objref all, soma, basal, apical, ais, hillock, axon, allaxon
objref somaidx, basalidx, apicalidx, axonidx, aisidx, hilidx
objref pyenv

gid = -1

ndends   = -1
ndendsec = -1
nDends   = -1
nSoma    = -1
nAxon    = -1

iterator pyitr() {local i, k, x, n, sz localobj itr1, itrn
    sz = $1
    n = (numarg()-1) / 2
    i = 1+n+1
    itr1 = $oi
    
    for k = 0, sz-1 {
        for x = 1, n {
            i = 1+n+x
            itrn = $oi
            i = 1+x
            $&i = itrn.__next__()
        }
        iterator_statement
    }
}
                                

proc assert() { local test strdef errmsg
    
    test = $1
    errmsg = $s2
    
    if (!test) {
        execerror ("Assertion failed: ", errmsg)
    }
}

proc init() { // arguments are id, gid
    
    apicalidx = new Vector()
    basalidx = new Vector()
    somaidx = new Vector()
    axonidx = new Vector()
    aisidx = new Vector()
    hilidx = new Vector()
    
    gid = $1
    
    if (numarg() > 2) {
        pyenv = new PythonObject()
    	nrnpython("import numpy as np")

        shape_from_python($o3,$o8,$o9,$o10,$o11)
        topol_from_python($o3,$o4,$o5,$o6,$o7,$o12)
                
    } else {
        ndends   = 4
        ndendsec = 4
        create sections[1+ndends*ndendsec]
        
        somaidx.append(0)
        for i=0, ndends-1 {
            for j=0, ndendsec-1 { 
                apicalidx.append(1+i*ndendsec + j)
            }
        }
        
        topol(ndends,ndendsec)
        geom()
    }
    subsets()
    geom_nseg()
    biophys()
    
}


proc subsets() { local i, ndends, ndendsec
    
    all = new SectionList()
    for i=0, nDends+nSoma+nAxon-1 { 
        sections[i] all.append() 
    }
    
    soma = new SectionList()
    sections[0] soma.append()
    
    apical = new SectionList()
    for i=0, apicalidx.size()-1 { 
        sections[apicalidx.x[i]] apical.append() 
    }
    
    basal = new SectionList()
    for i=0, basalidx.size()-1 { 
        sections[basalidx.x[i]] basal.append() 
    }
    
    axon  = new SectionList()
    allaxon  = new SectionList()
    ais      = new SectionList()
    hillock  = new SectionList()
    
    if (hilidx.size() > 0) {
        for i=0, hilidx.size()-1 {
            sections[hilidx.x[i]] {
                hillock.append()
                allaxon.append()
                all.append()
            }
        }
    }
    if (aisidx.size() > 0) {
        for i=0, aisidx.size()-1 {
            sections[aisidx.x[i]] {
                ais.append()
                allaxon.append()
                all.append()
            }
        }
    }
    
    for i=0, axonidx.size()-1 {
        sections[axonidx.x[i]] {
            axon.append()
            allaxon.append()
            all.append()
        }
    }

    
}

proc geom() {
    
    sections[0] {nseg=1 L=20 diam=20} // changed L & diam
    
    for i=0, 3 {
        sections[1+i*ndendsec+0] {nseg=3 L=24 diam=5.78}
        sections[1+i*ndendsec+1] {nseg=3 L=24 diam=4}
        sections[1+i*ndendsec+2] {nseg=3 L=24 diam=2.5}
        sections[1+i*ndendsec+3] {nseg=3 L=24 diam=1}
    }
    
}

func lambda_f() { local i, x, y, z, x1, x2, d1, d2, lam
    
    /*
    printf("lambda_f: n3d() = %d\n", n3d())
    if (n3d() <= 4) {
        for i=0, n3d()-1 {
            x = x3d(i)
            y = y3d(i)
            z = z3d(i)
            d = diam3d(i)
            printf("lambda_f: i = %d x = %g y = %g z = %g d = %g\n", i, x, y, z, d)
        }
    }
    */
    if (n3d() < 2) {
        return 1e5*sqrt(diam/(4*PI*$1*Ra*cm))
    }
    x1 = arc3d(0)
    d1 = diam3d(0)
    lam = 0
    for i=1, n3d()-1 {
        x2 = arc3d(i)
        d2 = diam3d(i)
        lam += (x2 - x1)/sqrt(d1 + d2)
        x1 = x2   d1 = d2
    }
    //  length of the section in units of lambda
    lam *= sqrt(2) * 1e-5*sqrt(4*PI*$1*Ra*cm)
    
    return L/lam
}

proc geom_nseg() { local freq, d_lambda
    
    freq = 200 // Hz, frequency at which AC length constant will be computed
    d_lambda = 0.1
    
    forsec all { nseg = int((L/(d_lambda*lambda_f(freq))+0.9)/2)*2 + 1 }

}

proc topol() {
    
    ndends = $1
    ndendsec = $2
    
    nDends = ndends*ndendsec
    
    connect sections[1+0*ndendsec+0](0), sections[0](1)
    connect sections[1+1*ndendsec+0](0), sections[0](1)
    connect sections[1+2*ndendsec+0](0), sections[0](0)
    connect sections[1+3*ndendsec+0](0), sections[0](0)
    
    for i=0,ndends-1 {
        for j=1,ndendsec-1 {
	    connect sections[1+i*ndendsec+j](0), sections[1+i*ndendsec+(j-1)](1)
        }
    }
}    


proc biophys() { local ndends, ndendsec
    
    forsec all {
        Ra=100
        cm=1.0
    }
    
    soma { distance() }
    
}




proc topol_from_python() { local i,j,l,p,s,p_layer,loc,vlen localobj vsrc, vdst, vloc, secnodes, layers, swc_types
    
    secnodes = $o1
    layers   = $o2
    
    vlen     = $o3.size
    vsrc     = pyenv.iter($o3)
    vdst     = pyenv.iter($o4)
    vloc     = pyenv.iter($o5)
    swc_types = $o6
    
    nDends = 0
    nSoma  = 0
    nAxon  = 0
    nAIS   = 0
    nHill  = 0
    
    for s=0, secnodes.__len__()-1 {
        
        p = secnodes.__getitem__(s)._[-1]
        p_layer = layers._[p]
        swc_type = swc_types._[p]

        if (swc_type == 4) {
            nDends = nDends + 1
            apicalidx.append(s)
        }
        if (swc_type == 3) {
            nDends = nDends + 1
            basalidx.append(s)
        }
        if (swc_type == 8) {
            hilidx.append(s)
            nHill = nHill + 1
            nAxon = nAxon + 1
        }
        if (swc_type == 7) {
            aisidx.append(s)
            nAIS = nAIS + 1
            nAxon = nAxon + 1
        }
        if (swc_type == 2) {
            axonidx.append(s)
            nAxon = nAxon + 1
        }
        if (swc_type == 1) {
            somaidx.append(s)
            nSoma = nSoma + 1
        }
        
    }
    
    for pyitr (vlen, &i, &j, &l, vsrc, vdst, vloc) {
        assert (i >= 0,  "compartment index in topology matrix is less than zero")
        assert (j >= 0,  "compartment index in topology matrix is less than zero")
        assert (i < nDends+nSoma+nAxon+1,  "compartment index in topology matrix is greater than the number of compartments")
        assert (j < nDends+nSoma+nAxon+1,  "compartment index in topology matrix is greater than the number of compartments")
        sections[i] loc = arc3d(l) / L 
        connect sections[j](0),sections[i](loc)
        
    }
    
}


proc shape_from_python() { local x,y,z,r,s,p localobj secnodes, pidxs, vx, vy, vz, vradius
    
    secnodes = $o1
    vx = $o2
    vy = $o3
    vz = $o4
    vradius = $o5
    
    create sections[secnodes.__len__()]
    for s=0, secnodes.__len__()-1 {
        pidxs = secnodes.__getitem__(s)
        sections[s] {
            pt3dconst(0)
            for pyitr (pidxs.size, &p, pyenv.iter(pidxs)) {
                
                x = vx._[p]
                y = vy._[p]
                z = vz._[p]
                r = vradius._[p]

                pt3dadd(x, y, z, 2*r)
            }
        }
    }
    
}



func is_art()  { return 0 }

obfunc connect2target() { localobj nc // $o1 target point process, optional $o2 returned NetCon
    forsec soma {
        nc = new NetCon(&v(1), $o1)
    }
    nc.threshold = -20
    if (numarg() == 2) { $o2 = nc } // for backward compatibility
    return nc
}

proc position() { local i
    
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-xx+x3d(i), $2-yy+y3d(i), $3-zz+z3d(i), diam3d(i))
  }
  xx = $1  yy = $2  zz = $3
}

endtemplate Cell
