
// A template to allow variant datatypes (numbers, strings, lists, and vectors)
begintemplate Value

public n, s, l, v, is_number, is_string, is_list, is_vector, is_nil, is_undefined
strdef s
objref l, v

n = -1

is_undefined = 1
is_nil = 0
is_number = 0
is_string = 0
is_list = 0
is_vector = 0

// The first argument is the type flag
// -1 -> nil, 0 -> number, 1 -> string, 2 -> list, 3 -> vector
proc init() { local type
    type = $1
    if (type == -1) {
        is_nil = 1
        is_undefined = 0
    } else if (type == 0) {
        n = $2
        is_undefined = 0
        is_number = 1
    } else if (type == 1) {
        s = $s2
        is_undefined = 0
        is_string = 1
    } else if (type == 2) {
        l = $o2
        is_undefined = 0
        is_list = 1
    } else if (type == 3) {
        v = $o2
        is_undefined = 0
        is_vector = 1
    } else {
      execerror("Value: unknown type flag")
    }
}


endtemplate Value

